---
API: 3
OpenSesame: 4.0.24
Platform: nt
---
set width 1920
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set psychopy_waitblanking no
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set expyriment_opengl yes
set experiment_path "C:\\Users\\TO3\\Desktop\\flipscreen-main"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#3d3846"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_script True

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script new_inline_script
	set description "Executes Python code"
	___run__
	import numpy as np
	import pandas as pd
	
	win = exp.window
	
	
	n_cycles = 2000
	
	
	
	canvas1 = Canvas()
	canvas1.rect(-960, -540, 1920, 1080, fill=True, color = 'black')
	
	canvas2 = Canvas()
	canvas2.rect(-960, -540, 1920, 1080, fill=True, color = 'white')
	
	timing = 3
	
	a = b = 0
	
	blacktowhite = []
	whitetoblack = []
	
	for i in range(n_cycles):
	    
	    a = canvas1.show()
	    blacktowhite.append(a-b)
	    #print(a-b)
	    b = canvas2.show()
	    whitetoblack.append(b-a)
	    #print(b-a)
	
	blacktowhite = np.array(blacktowhite, dtype=float)
	whitetoblack = np.array(whitetoblack, dtype=float)
	btw = pd.DataFrame(blacktowhite)
	print(btw.describe())
	wtb = pd.DataFrame(whitetoblack)
	print(wtb.describe())
	
	
	print("Detected Frame Rate:", win.getActualFrameRate())
	__end__
	set _prepare ""

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="OpenSesame 4.0 <i>Melodramatic Milgram</i>" x=0 y=0 z_index=0

