---
API: 3
OpenSesame: 4.0.24
Platform: nt
---
set width 1920
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set psychopy_waitblanking yes
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set expyriment_opengl yes
set experiment_path "C:/Users/cemreproject/Desktop/flipscreen"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#3d3846"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_script True

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script new_inline_script
	set description "Executes Python code"
	___run__
	import serial
	import subprocess,json
	import time
	
	    
	def getComPort(deviceName:str):
	    powershellCmdPart1 = "PowerShell -Command \"& {Get-PnpDevice | " 
	    powershellCmdPart2 = "Where-Object {$_.FriendlyName -Like '*(COM*'} | Where-Object {$_.Status -Like '*OK*'} | " 
	    powershellCmdPart3 = "Where-Object {$_.FriendlyName -Like '*" + deviceName + "*'} | " 
	    #powershellCmdPart4 = "Where-Object {$_.PNPDeviceID -Like '*PID_6015*'} | " 
	    powershellCmdPart5 = "Select-Object FriendlyName | ConvertTo-Json}\""
	    powershellCmd = powershellCmdPart1 + powershellCmdPart2 + powershellCmdPart3 + powershellCmdPart5
	    # return subprocess.getoutput(powershellCmd)
	    return json.loads(subprocess.getoutput(powershellCmd))['FriendlyName'].split('(')[-1].rstrip(')')
	
	
	def sendTrigger(trigVal:int = 1):
	    io_eeg.close()
	    io_eeg.open()
	    triggerint = trigVal
	    io_eeg.write(triggerint.to_bytes(1,'little'))
	    io_eeg.close() # make sure you close the port, otherwise the next user gets an error. 
	
	def triggerOnly(trigVal:int = 1):
	    io_eeg.write(trigVal.to_bytes(1,'little'))
	
	io_eeg = serial.Serial(
	    port=getComPort('USB Serial Port'),
	    baudrate=115200,
	    parity=serial.PARITY_NONE,
	    stopbits=serial.STOPBITS_ONE,
	    bytesize=serial.EIGHTBITS
	)
	
	win = exp.window
	print('XXXXXXXXXXXXX')
	print(win.useFBO)
	print('XXXXXXXXXXXXX')
	canvas1 = Canvas()
	canvas1.rect(-960, -540, 1920, 1080, fill=True, color = 'black')
	
	canvas2 = Canvas()
	canvas2.rect(-960, -540, 1920, 1080, fill=True, color = 'white')
	
	timing = 3
	n_cycles = 20
	
	
	## Keyboard 
	keyboard_exit_shortcut = Keyboard(keylist=['q'], timeout=1)
	
	io_eeg.close()
	io_eeg.open()
	
	for i in range(n_cycles):
	    canvas1.show()
	    
	    time.sleep(2)
	    
	    pretime = time.time()
	    triggerOnly()
	    aftertrigtime = time.time()
	    canvas2.show()
	    aftercanvastime = time.time()
	    time.sleep(0.5)
	    
	    print(f'aftertrigtime - pretime = {aftertrigtime * 1000 - pretime * 1000}')
	    print(f'aftercanvastime - pretime = {aftercanvastime * 1000 - pretime * 1000}')
	    
	    key, end_time = keyboard_exit_shortcut.get_key()
	    if key in ['q']:
	        break
	
	
	io_eeg.close() 
	
	print("Detected Frame Rate:", win.getActualFrameRate())
	__end__
	set _prepare ""

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="OpenSesame 4.0 <i>Melodramatic Milgram</i>" x=0 y=0 z_index=0

